<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:orc="clr-namespace:OpenRigs.Core;assembly=OpenRigs.Core"
                 xmlns:orcl="clr-namespace:OpenRigs.Control;assembly=OpenRigs.Control"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Calibrates a dome projector's gamma: shows a ramp of grey levels full screen, reads each one's brightness from a photodiode on the behavior board's AnalogInput0, and writes each level and its reading to calibration\gamma-ramp.csv beside this machine's rig.yml. It measures only: rig-control fits the ramp once the run completes and writes the lookup table BonVision's GammaCorrection reads (calibration\gammalut.bmp, with gammalut.json recording the ramp and who ran it, and dated copies in calibration\history\). rig-control's Calibrations page launches it with the board's PortName from rig.yml; DisplayDevice is left at First, as av-dome's window is (rig-control passes it to neither). Ready once the photodiode's first reading arrives; Go runs the ramp; Finished once every level is written.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ConfigRoot" DisplayName="ConfigRoot" Description="The root under which each machine has its own configuration directory, &lt;ConfigRoot&gt;\&lt;MACHINE-NAME&gt;\rig.yml; the ramp is written into calibration\ there." />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Settings</Name>
        <Description>RigConfigDirectory is &lt;ConfigRoot&gt;\&lt;MACHINE-NAME&gt;, where the ramp is written. Fails at startup if the machine has no configuration directory.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ConfigRoot" DisplayName="ConfigRoot" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="orc:ResolveRigConfigDirectory">
                <orc:ConfigRoot>C:\Coen-Lab-Local\RigConfigs</orc:ConfigRoot>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigConfigDirectory</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SubjectId" />
        <Property Name="SessionId" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialization</Name>
        <Description>The experiment controller (OpenRigs.Control, ExperimentControl) over TCP 5561, which the rig agent relays. Reports Recording at Go.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SubjectId" />
              <Property Name="SessionId" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="OpenRigs.Control:ExperimentControl.bonsai">
              <SubjectId />
              <SessionId />
              <ControlEndpoint>@tcp://127.0.0.1:5561</ControlEndpoint>
              <Parameters />
              <Commands />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ExperimentGo</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="orcl:ReportPhase">
                <orcl:Phase>Recording</orcl:Phase>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" DisplayName="PortName" Description="The behavior board's serial port: rig.yml's behaviorBoard: main: portName, which rig-control gives at launch." />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Description>The behavior board on PortName. Its AnalogInput0 (1 kHz, in ADC counts) is published as Photodiode: plug the photodiode facing the screen into the board's ADC0 for the run. Ready once the first ADC0 reading arrives, so a board sending no analog data stays short of Ready instead of failing at the first level (an empty reading window).</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="PortName" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="OpenRigs.Devices:BehaviorBoard.BehaviorBoard.bonsai">
              <CommandsSubjectName>BehaviorBoard-Main.Commands</CommandsSubjectName>
              <PortName>COMx</PortName>
              <DumpRegisters>true</DumpRegisters>
              <Heartbeat>Enabled</Heartbeat>
              <EventsSubjectName>BehaviorBoard-Main.Data</EventsSubjectName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorBoard-Main.Data</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:AnalogData" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>AnalogInput0</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>double(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Photodiode</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Photodiode</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="orcl:ReportPhase">
                <orcl:Phase>Ready</orcl:Phase>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DisplayDevice" DisplayName="DisplayDevice" Description="The display the dome projector is on (BonVision CreateWindow). First by default, the display av-dome's window opens on too; rig-control passes it to neither today, so a dome whose projector is not Windows' first display needs it in calibrations.toml's [gamma.rig] and av-dome's launch together." />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Display</Name>
        <Description>A full-screen BonVision window on DisplayDevice, black until Go, with no mesh mapping and no gamma correction, so the ramp drives the projector's raw levels. DrawStimuli is its frame, in a view from -1 to 1 both ways.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DisplayDevice" DisplayName="DisplayDevice" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>1920</gl:Width>
                <gl:Height>1080</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Black</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>false</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>First</gl:DisplayDevice>
                <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-1</Left>
              <Right>1</Right>
              <Bottom>-1</Bottom>
              <Top>1</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>DrawStimuli</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Levels" DisplayName="Levels" Description="How many grey levels the ramp shows, evenly from black to white; also the lookup table's width. 80 by default, as av-dome's lookup has." />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Calibration</Name>
        <Description>At Go: after 1 s of black, each of Levels grey levels full screen for 0.5 s (fixed: the reading window ends at 0.45 s), its photodiode reading the mean from 0.2 s to 0.45 s in (the level as the level metric). Each level and its reading is written as it comes to calibration\gamma-ramp.csv in RigConfigDirectory (columns level, reading; replaced every run). No fit here: once the run completes, rig-control interpolates the lookup from the ramp and writes calibration\gammalut.bmp and gammalut.json, with history, refusing a ramp that got no brighter. Reports how many levels were measured as the points metric, then Finished.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigConfigDirectory</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\calibration\gamma-ramp.csv</Format>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>WriteRamp</Name>
              <Description>The ramp file, opened only once its path is known: a CsvWriter creates its file when the workflow starts, from whatever FileName it has then, and RigConfigDirectory (an AsyncSubject) arrives a moment later, so a writer mapped from it directly wrote into the workflow's own folder, the lab clone, every run. Started by the path, it writes the rows RampReadings carries.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RampReadings</Name>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>gamma-ramp.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>true</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Levels" DisplayName="Levels" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ExperimentGo</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Ramp</Name>
              <Description>The levels, one every 0.5 s after 1 s, each drawn full screen and measured; each (level, reading) pair once it is read, also reported as the reading metric ("0.513 412.37": both in one, since rig-control polls once a second), completing after the last.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Count" DisplayName="Levels" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
                    <Count>80</Count>
                    <RangeMin>0</RangeMin>
                    <RangeMax>1</RangeMax>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT1S</rx:DueTime>
                      <rx:Period>PT0.5S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" />
                      <Property Name="ColorG" />
                      <Property Name="ColorB" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStimuli</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>2</ExtentX>
                    <ExtentY>2</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0:0.000}</Format>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="orcl:ReportMetric">
                      <orcl:Name>level</orcl:Name>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>Measure</Name>
                    <Description>The level and the mean Photodiode reading from 0.2 s to 0.45 s after it is shown, once that window closes.</Description>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Photodiode</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT0.2S</rx:DueTime>
                            <rx:Period>PT0S</rx:Period>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SkipUntil" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT0.45S</rx:DueTime>
                            <rx:Period>PT0S</rx:Period>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Average" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="5" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="0" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Format">
                    <Format>{0:0.000} {1:0.00}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="orcl:ReportMetric">
                      <orcl:Name>reading</orcl:Name>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="6" To="8" Label="Source2" />
                  <Edge From="5" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="5" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="11" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(Item1 as level, Item2 as reading)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>RampReadings</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Count" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0} levels measured</Format>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="orcl:ReportMetric">
                <orcl:Name>points</orcl:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="orcl:ReportPhase">
                <orcl:Phase>Finished</orcl:Phase>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="3" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="2" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
